PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '77'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = MR_AUT
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ##  some start time info
        print(data.getDateStr(format="%H:%M:%S.%m"))   #local: set/mark start of current run

        wavDirName = '%s_%s_%s_%s_%s' % (os.path.join(_thisDir, 'data', ''), expInfo['participant'], expName, data.getDateStr(format="%Y-%m-%d_%H%M"), '_wav')
        if not os.path.isdir(wavDirName):
            os.makedirs(wavDirName)  # to hold .wav files
        #print(f"{wavDirName=}")

        ##  define some handy keys
        goRight_key = '7'
        goOn_key    = '8'
        goLeft_key  = '9'

        main_pos_y   = 0

        ##  ### Options for DEBUG/RESARCH-mode ###  ##
        DEBUG = 1 #0=research-mode; 1=debug-mode
        if DEBUG:
            fixDur = 2
            itemDur = 5
            carryOver_lock_time = 0.5       #for 'carryOver_lock_time' [s] it's not possible to stop the answer
            MR_AUT_taskMaxTime = .5 * 60     #debugging: task lasts for 30s/1min
        else:
            fixDur = 6
            itemDur = 15
            carryOver_lock_time = 1         #for 'carryOver_lock_time' [s] it's not possible to stop the answer
            MR_AUT_taskMaxTime = 20 * 60    #orig: task lasts for 20min
            #MR_AUT_taskMaxTime = 5 * 60    #kind of debug: task lasts for 5min



        """
        ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###
           ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###
        ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###   ###

        def generate_jitter_array(item_count):
            ###
            Generiert Jitter-Array von 'jitter_min' bis 'jitter_max'; 'jitter_range' wird gleichmäßig auf die Items verteilt.

            Args: item_count (int): Anzahl der Items

            Returns: numpy.array: Array mit jitter-Werten zwischen 'jitter_min' und 'jitter_max'
            ###
            if item_count <= 0:
                return np.array([])

            jitter_min = 3.1        # Basiswert: 3 Sekunden
            jitter_max = 9.1        # jitterrange: 6 Sekunden (von 3 bis 9 Sekunden)

            # Gleichmäßige Verteilung über die Jitterrange
            step = (jitter_max-jitter_min) / item_count
            jitter_offsets = np.arange(0, (jitter_max-jitter_min), step)[:item_count]

            # Optional: Kleine zufällige Variation hinzufügen (kann entfernt werden)
            # jitter_offsets += np.random.uniform(-step/4, step/4, item_count)

            jitter_array = jitter_min + jitter_offsets  #Jitter-Array: Basiswert + Offset

            jitter_array = np.clip(jitter_array, jitter_min, jitter_max)    #Sicherstellen, dass Werte im Bereich [jitter_min, jitter_max] bleiben

            np.random.shuffle(jitter_array)             #Array durchmischen

            return jitter_array


        # Beispiel-Verwendung
        if __name__ == "__main__":
            # Test mit verschiedenen Itemanzahlen
            #test_cases = [40, 60]
            test_cases = [60]

            for item_count in test_cases:
                jitter = generate_jitter_array(item_count)
                #print(f"\nItemanzahl: {item_count}")
                #print(f"Jitter-Array: {jitter}")
                #print(f"Min: {jitter.min():.2f}s, Max: {jitter.max():.2f}s, Durchschnitt: {jitter.mean():.2f}s")
                #print(f"Gesamt-Zeitspanne: {jitter.sum():.2f}s")
        """
  Routine wait4scanner
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    TextComponent GOfromMRT_txt
      letterHeight = 0.025
      opacity [set every frame] = sin(3*t)+0.25
      startVal [time (s)] = 0.0
      text = ...awaiting clearance from the MRI-Scanner...
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    KeyboardComponent GOfromMRT_key
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_MR_AUT_code
      Code Type = Py
      End Routine:
        #store start time of MR_AUT task
        MR_AUTclock = core.Clock()
        MR_AUT_startTime = MR_AUTclock.getTime()
        print(f'{MR_AUT_startTime=}')
  Routine AUT_item
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    CodeComponent fix_code
      Code Type = Py
      Begin Routine:
        ##  jitter stuff  ##
        #rand_dur = np.random.uniform(3, 9)
        #trials.addData('rand_dur', rand_dur)
        #trials.addData('fix_jitter', jitter[trials.thisN])
        #print(f"Unschärfe Nr. {trials.thisN} in [s]: {jitter[trials.thisN]}")

        print(f"begin: {MR_AUTclock.getTime() = }")
        print(f"begin: {MR_AUTclock.getTime() - MR_AUT_startTime = }")

        once = False
      Each Frame:
        if fixation.status==FINISHED and not once:
            once = True
            print(f"each: {MR_AUTclock.getTime() = }")
            print(f"each: {MR_AUTclock.getTime() - MR_AUT_startTime = }")
      End Routine:
        AUTidea_key.clearEvents(eventType='keyboard')  # Lösche alle vorherigen Tasteneingaben
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    BidsEventComponent bidsE_fix plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = cross
      link_component = fixation
      linked_attributes = ('Onset', 'Duration', 'Event Type')
      onset = (MR_AUTclock.getTime() - MR_AUT_startTime)
      overwrite_linked = True
      trial_type = fixation
    TextComponent AUTitem_txt
      letterHeight = 0.1
      startVal [condition] = fixation.status==FINISHED
      stopVal [duration (s)] = $itemDur
      text [set every repeat] = $MR_AUTitem
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    BidsEventComponent bidsE_AUTitem plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = $"%s" % (MR_AUTitem)
      link_component = AUTitem_txt
      linked_attributes = ('Onset', 'Duration', 'Event Type')
      onset = MR_AUTclock.getTime() - MR_AUT_startTime
      overwrite_linked = True
      trial_type = AUTitem
    KeyboardComponent AUTidea_key
      allowedKeys = '8','3'
      forceEndRoutine = True
      startVal [condition] = AUTitem_txt.status==STARTED
      stopVal [condition] = AUTitem_txt.status==FINISHED
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    BidsEventComponent bidsE_AUTideakey plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = keypress
      link_component = AUTidea_key
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      onset = MR_AUTclock.getTime() - MR_AUT_startTime
      overwrite_linked = True
      trial_type = AUTidea_key
  Routine AUT_response
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    CodeComponent AUTidea_code
      Code Type = Py
      Begin Experiment:
        import sounddevice as sd
        import soundfile as sf
        import time

        ## set audio recording parameters
        sample_rate = 44100  # Sample rate (Hz)
        channels = 1         # Number of audio channels (2 for stereo)

        ## get/access the keyboard
        t_kb = keyboard.Keyboard()

        ### safe stop stream  ##
        def safe_stop_stream(stream):
            ##stop and close an input stream safely##
            if stream is not None:
                try:
                    stream.stop()
                finally:
                    stream.close()
            return None


        ###   save_recording   ###
        def save_recording(audio_data, recording_count, recordings_dir, sample_rate):
            ###Helper function to save a recording###
            if not audio_data:
                print("No audio data to save.")
                return False

            # Convert list of numpy arrays into one large numpy array
            recording = np.concatenate(audio_data, axis=0)

            ## prepare the recording
            audio_file = os.path.join(wavDirName, f"{expInfo['participant']}_{MR_AUTitem}.wav")    #name the recording with 'participant'/'sub.-ID'

            try:
                sf.write(audio_file, recording, sample_rate)            #save the recording to a file
            except Exception as e:
                print(f"Error saving recording: {e}")
                return False

            return True
      Begin Routine:
        event.clearEvents('keyboard')

        ##  recording flag  ##
        recording_started = False

        ##  Counter for recording enumeration
        recording_count = 1

        ##  get start-time for 't-...'-routine
        t_startTime = core.getTime()

        ## Vor dem ersten Aufruf von getKeys() und getState() in "each frame"
        t_kb.clearEvents(eventType='keyboard')  # Lösche alle vorherigen Tasteneingaben

        audio_data = []
        stream = None

        max_answer_time = 4
      Each Frame:
        ##  check 'max_answer_time'  ##
        if core.getTime() > t_startTime + max_answer_time:
            #print("'max_answer_time' over...")

            if recording_started:
                stream = safe_stop_stream(stream)
                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)

            is_recording = False
            continueRoutine = False # finish trial


        ##  Initialize recording on first call  ##
        if not recording_started:
            recording_started = True

            # Start audio recording
            audio_data = []
            try:
                stream = sd.InputStream(
                    samplerate=sample_rate,
                    channels=channels,
                    callback=lambda indata, frames, time, status: audio_data.append(indata.copy())
                )
                stream.start()

            except Exception as e:
                print(f"Recording failed to start: {e}")
                continueRoutine = False

            # Display AUTitem, but different color
            AUTidea.text = MR_AUTitem
            #win.flip()


        ##  Check for exit keys
        keys = t_kb.getKeys()
        if keys and any(k.name == 'escape' for k in keys):
            safe_stop_stream(stream)
            continueRoutine = False

        ##  Check for spacebar/'goOn-Key' to stop  ##
        #if t_kb.getState('space'):
        if t_kb.getState(goOn_key):
            # Wait for release
            #while t_kb.getState('space'):
            while t_kb.getState(goOn_key):
                core.wait(0.01)

            if core.getTime() > t_startTime + carryOver_lock_time:
                # Stop and save
                safe_stop_stream(stream)

                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)

                # Clear screen and finish
                AUTidea.text = ''
                win.flip()
                continueRoutine = False

        core.wait(0.01)
    TextComponent AUTidea
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = yummuy
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    BidsEventComponent bidsE_AUTresponse plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = $"idea_%s" % (MR_AUTitem)
      link_component = AUTidea
      linked_attributes = ('Onset', 'Duration')
      onset = MR_AUTclock.getTime() - MR_AUT_startTime
      overwrite_linked = True
      trial_type = AUTaudioResponse
  Routine AUT_likertRating
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    SliderComponent likertRating
      color = pink
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      letterHeight = 0.035
      size = (0.8, 0.025)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = 1,2,3,4,5
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    CodeComponent likertRating_code
      Code Type = Py
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      Begin Routine:
        ##  set likert scale starting point  ##
        event.clearEvents('keyboard')
        likertRating.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if goLeft_key in keys:
                likertRating.markerPos = likertRating.markerPos - 1
            elif goRight_key in keys:
                likertRating.markerPos = likertRating.markerPos  + 1
      End Routine:
        thisExp.addData("likertRating", likertRating.markerPos)
    BidsEventComponent bidsE_AUTlikert plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = $"likertRating_%s" % (likertRating.markerPos)
      link_component = likertRating
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = AUTselfrating
    TextComponent likertRating_header
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Kreativ
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    TextComponent likertRating_l_label
      letterHeight = 0.05
      pos = (-.4, main_pos_y - .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = gar nicht
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    TextComponent likertRating_r_label
      letterHeight = 0.05
      pos = (.4, main_pos_y - .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = sehr
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    KeyboardComponent likertRating_end_key
      allowedKeys = goOn_key,'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    BidsEventComponent bidsE_likertRating_key plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = certifyLikertRating
      link_component = likertRating_end_key
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = eof_likertRating
  Routine AUT_insight
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    SliderComponent insi_possible
      color = white
      forceEndRoutine = False
      initVal = 1
      labels = "Ja","Nein","Weiß\nnicht"
      letterHeight = 0.035
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = radio
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    CodeComponent insi_code
      Code Type = Py
      Begin Routine:
        show_insi_intensity = 0

        event.clearEvents('keyboard')
        insi_possible.markerPos = 1

        pos_insi_rating = 99
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if goLeft_key in keys:
                insi_possible.markerPos = insi_possible.markerPos - 1
            elif goRight_key in keys:
                insi_possible.markerPos = insi_possible.markerPos  + 1
            pos_insi_rating = insi_possible.markerPos
            #print(f'{pos_insi_rating=}')

        if insi_possible.markerPos == 0:    #'Ja'
            #print(f'{pos_insi_rating=}')
            #print(f'{insi_possible.markerPos=}')
            show_insi_intensity = 1
        elif insi_possible.markerPos == 1 or insi_possible.markerPos == 2:  #'Nein'/'Weiß nicht'
            #print(f'{insi_possible.markerPos=}')
            show_insi_intensity = 0
      End Routine:
        thisExp.addData("Insight", insi_possible.markerPos)
    BidsEventComponent bidsE_possible_insi plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = $"INSI_possible_%s" % (insi_possible.markerPos)
      link_component = insi_possible
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = INSI_possible
    TextComponent insi_possible_header
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Insight
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    KeyboardComponent insight_end_key
      allowedKeys = goOn_key,'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    BidsEventComponent bidsE_insi_key plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = certify_insight_possible
      link_component = insight_end_key
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = eof_INSI_possible
  Routine insi_intensity
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    SliderComponent insi_intensity_likert
      borderColor [set every frame] = white
      color [set every frame] = white
      fillColor [set every frame] = red
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = "schwach", "stark"
      letterHeight = 0.035
      size = (0.8, 0.025)
      startVal [time (s)] = 0.0
      styles = ['radio']
      ticks = 1,2,3,4,5
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    CodeComponent insi_intensity_code
      Code Type = Py
      Begin Routine:
        event.clearEvents('keyboard')
        insi_intensity_likert.markerPos = 3
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if goLeft_key in keys:
                insi_intensity_likert.markerPos = insi_intensity_likert.markerPos - 1
            elif goRight_key in keys:
                insi_intensity_likert.markerPos = insi_intensity_likert.markerPos  + 1
      End Routine:
        thisExp.addData("insight_intensity", insi_intensity_likert.markerPos)
    BidsEventComponent bidsE_insi_intensity plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = $"INSI_intensity_%s" % (insi_intensity_likert.markerPos)
      link_component = insi_intensity_likert
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = INSI_intensity
    TextComponent insi_intensity_header
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0
      text = Wie stark
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    KeyboardComponent insi_intensity_end_key
      allowedKeys = goOn_key,'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    BidsEventComponent bidsE_insi_intensity_key plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = certify_INSI_intensity
      link_component = insi_intensity_end_key
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = eof_INSI_intensity
  Routine thx
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    TextComponent thx_txt
      durationEstim = 5
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Beenden mit Enter
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    BidsEventComponent bidsE_thx_key plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      event_type = finalTaskKey
      link_component = thx_key
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = True
      trial_type = endOfTask
  Routine chk4_n2item
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    CodeComponent n2_item_check
      Code Type = Py
      Begin Routine:
        ##  check (remaining) time for items of 'n2' MR_AUT-Item-pool  ##
        if MR_AUT_condition_file == 'stim/MR_AUT_items_n2.csv':
            if core.getTime() > (MR_AUT_startTime + MR_AUT_taskMaxTime):
                trials.finished = True
                #MR_AUT_blocks.finished = True
                continueRoutine = False
  Routine chk4_n2block
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    CodeComponent n2_block_check
      Code Type = Py
      Begin Routine:
        ##  check (remaining) time for items of 'n2' MR_AUT-Item-pool  ##
        if core.getTime() > (MR_AUT_startTime + MR_AUT_taskMaxTime):
            #if MR_AUT_condition_file == 'stim/MR_AUT_items_n2.csv':
            trials.finished = True
            MR_AUT_blocks.finished = True
            continueRoutine = False
  BidsExportRoutine MR_AUT_BIDS
    add_code = True
    add_environment = True
    add_stimuli = True
    bids_license = CC-BY-ND-4.0
    data_type = func
    dataset_name = MR_AUT_BIDS
    generate_hed_metadata = True
    runs = True
Flow
  Routine settings
  LoopInitiator wait4scanner_byp loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine wait4scanner
  LoopTerminator wait4scanner_byp
  LoopInitiator MR_AUT_blocks loopType="TrialHandler"
    conditionsFile = stim/MR_AUT_blocks.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('MR_AUT_condition_file', 'stim/MR_AUT_items_n1.csv')]),
      OrderedDict([('MR_AUT_condition_file', 'stim/MR_AUT_items_n2.csv')])]
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 21:23
      conditionsFile = $MR_AUT_condition_file
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('MR_AUTitem', 'Autoreifen'), ('MR_AUTitem_mrk', np.int64(101))]),
        OrderedDict([('MR_AUTitem', 'Badewanne'), ('MR_AUTitem_mrk', np.int64(102))]),
        OrderedDict([('MR_AUTitem', 'Bananenschale'), ('MR_AUTitem_mrk', np.int64(103))]),
        OrderedDict([('MR_AUTitem', 'Blumenvase'), ('MR_AUTitem_mrk', np.int64(104))]),
        OrderedDict([('MR_AUTitem', 'Bügeleisen'), ('MR_AUTitem_mrk', np.int64(105))]),
        OrderedDict([('MR_AUTitem', 'Föhn'), ('MR_AUTitem_mrk', np.int64(106))]),
        OrderedDict([('MR_AUTitem', 'Frisbee'), ('MR_AUTitem_mrk', np.int64(107))]),
        OrderedDict([('MR_AUTitem', 'Gabel'), ('MR_AUTitem_mrk', np.int64(108))]),
        OrderedDict([('MR_AUTitem', 'Glocke'), ('MR_AUTitem_mrk', np.int64(109))]),
        OrderedDict([('MR_AUTitem', 'Gürtel'), ('MR_AUTitem_mrk', np.int64(110))]),
        OrderedDict([('MR_AUTitem', 'Hufeisen'), ('MR_AUTitem_mrk', np.int64(111))]),
        OrderedDict([('MR_AUTitem', 'Kleiderhaken'), ('MR_AUTitem_mrk', np.int64(112))]),
        OrderedDict([('MR_AUTitem', 'Klopapier'), ('MR_AUTitem_mrk', np.int64(113))]),
        OrderedDict([('MR_AUTitem', 'Knetmasse'), ('MR_AUTitem_mrk', np.int64(114))]),
        OrderedDict([('MR_AUTitem', 'Konservendose'), ('MR_AUTitem_mrk', np.int64(115))]),
        OrderedDict([('MR_AUTitem', 'Krawatte'), ('MR_AUTitem_mrk', np.int64(116))]),
        OrderedDict([('MR_AUTitem', 'Lampe'), ('MR_AUTitem_mrk', np.int64(117))]),
        OrderedDict([('MR_AUTitem', 'Locher'), ('MR_AUTitem_mrk', np.int64(118))]),
        OrderedDict([('MR_AUTitem', 'Mülleimer'), ('MR_AUTitem_mrk', np.int64(119))])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
      Routine AUT_item
      Routine AUT_response
      Routine AUT_likertRating
      Routine AUT_insight
      LoopInitiator insi_strength_on loopType="TrialHandler"
        loopType = fullRandom
        nReps = show_insi_intensity
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        Routine insi_intensity
      LoopTerminator insi_strength_on
      Routine chk4_n2item
    LoopTerminator trials
    Routine chk4_n2block
  LoopTerminator MR_AUT_blocks
  Routine thx
  BidsExportRoutine MR_AUT_BIDS
